i:Ts/NumberOfThreads = 0
#Seed
i:Ts/Seed = 1

b:Ge/QuitIfOverlapDetected = "False"
Ge/CheckForOverlaps = "False"


##############################
d:Ph/Default/CutForAllParticles= 1.0 mm
##############################

#WORLD
s:Ge/World/Material = "Air"
d:Ge/World/HLX =  3. m
d:Ge/World/HLY =  3. m
d:Ge/World/HLZ =  3. m
b:Ge/World/Invisible = "TRUE"


s:Ge/BeamLine/Type="Group"
s:Ge/BeamLine/Parent = "World"
d:Ge/BeamLine/TransX = 0. m
d:Ge/BeamLine/TransY = 0. m
d:Ge/BeamLine/TransZ = 0. m
d:Ge/Beamline/RotX = 0. deg
d:Ge/BeamLine/RotY = 0. deg
d:Ge/BeamLine/RotZ = 0. deg

#SCATTERING FOIL
s:Ge/ScatteringFoil/Parent = "BeamLine"
s:Ge/ScatteringFoil/Type = "TsBox"
s:Ge/ScatteringFoil/Material = "Lead"
d:Ge/ScatteringFoil/HLX = 100. mm
d:Ge/ScatteringFoil/HLY = 100. mm
d:Ge/ScatteringFoil/HLZ = 0.39 mm
d:Ge/ScatteringFoil/TransX = 0. cm
d:Ge/ScatteringFoil/TransY = 0. cm
d:Ge/ScatteringFoil/TransZ = -10.0 mm #-1cm


#SCINT MAT
sv:Ma/ScintMat/Components = 2 "Hydrogen" "Carbon"
uv:Ma/ScintMat/Fractions = 2 0.08474 0.91526
d:Ma/ScintMat/Density = 1.032 g/cm3
s:Ma/ScintMat/DefaultColor = "green"

#PLASTIC SCINTILLATOR
s:Ge/Scintil0or/Parent = "BeamLine"
s:Ge/Scintil0or/Type = "TsBox"
s:Ge/Scintil0or/Material = "ScintMat"
d:Ge/Scintil0or/HLX = 100. mm
d:Ge/Scintil0or/HLY = 100. mm
d:Ge/Scintil0or/HLZ = 1.5 mm
d:Ge/Scintil0or/TransX = 0. cm
d:Ge/Scintil0or/TransY = 0. cm
d:Ge/Scintil0or/TransZ = -100.0 mm #-10cm


#SCATTERING RING
s:Ge/Ring/Type = "Group"
s:Ge/Ring/Parent = "BeamLine"
d:Ge/Ring/TransX = 0. cm
d:Ge/Ring/TransY = 0. cm
d:Ge/Ring/TransZ = -500.0 mm #50cm dal fascio
d:Ge/Ring/RotX = 0. deg
d:Ge/Ring/RotY = 0. deg
d:Ge/Ring/RotZ = 0. deg

s:Ge/OuterRing/Parent = "Ring"
s:Ge/OuterRing/Type                = "TsCylinder"
s:Ge/OuterRing/Material            = "Aluminum"
d:Ge/OuterRing/TransX              = 0 cm
d:Ge/OuterRing/TransY              = 0 cm
d:Ge/OuterRing/TransZ              = 2.5 mm #i due ring hanno il bordo ver il phantom allineato
d:Ge/OuterRing/RotX                = 0 deg
d:Ge/OuterRing/RotY                = 0 deg
d:Ge/OuterRing/RotZ                = 0 deg
d:Ge/OuterRing/RMin                = 11. mm
d:Ge/OuterRing/RMax                = 100. mm
d:Ge/OuterRing/HL                  = 2.5 mm
d:Ge/OuterRing/SPhi                = 0 rad
d:Ge/OuterRing/DPhi                = 360 deg
s:Ge/OuterRing/DrawingStyle        = "FullWireFrame"

s:Ge/InnerRing/Parent = "Ring"
s:Ge/InnerRing/Type                = "TsCylinder"
s:Ge/InnerRing/Material            = "Lead"
d:Ge/InnerRing/TransX              = 0 cm
d:Ge/InnerRing/TransY              = 0 cm
d:Ge/InnerRing/TransZ              = 0.75 mm #i due ring hanno il bordo verso il phantom allineato
d:Ge/InnerRing/RotX                = 0 deg
d:Ge/InnerRing/RotY                = 0 deg
d:Ge/InnerRing/RotZ                = 0 deg
d:Ge/InnerRing/RMin                = 0. mm
d:Ge/InnerRing/RMax                = 11. mm
d:Ge/InnerRing/HL                  = 0.75 mm
d:Ge/InnerRing/SPhi                = 0 rad
d:Ge/InnerRing/DPhi                = 360 deg
s:Ge/InnrRing/DrawingStyle        = "FullWireFrame"
s:Ma/InnerRing/DefaultColor = "gray"

s:Ge/RingSupportFoil/Parent = "Ring"
s:Ge/RingSupportFoil/Type = "TsBox"
s:Ge/RingSupportFoil/Material = "Aluminum"
d:Ge/RingSupportFoil/HLX = 100. mm
d:Ge/RingSupportFoil/HLY = 100. mm
d:Ge/RingSupportFoil/HLZ = 0.5 mm
d:Ge/RingSupportFoil/TransX = 0. cm
d:Ge/RingSupportFoil/TransY = 0. cm
d:Ge/RingSupportFoil/TransZ = -0.5 mm #-10cm



#RIDGE FILTER
sv:Ma/Plastic/Components = 3 "Hydrogen" "Carbon" "Oxygen"
uv:Ma/Plastic/Fractions = 3 0.071062 0.740938 0.188000
d:Ma/Plastic/Density = 1.4 g/cm3
s:Ma/Plastic/DefaultColor = "yellow"

s:Ge/RidgeFilter/Parent = "BeamLine"
s:Ge/RidgeFilter/Type = "RidgeFilter_PassiveScanning"
s:Ge/RidgeFilter/Material = "Vacuum"
s:Ge/RidgeFilter/RidgeBase/Material = "Plastic"
s:Ge/RidgeFilter/SingleTrap/Material = "Plastic"
d:Ge/RidgeFilter/TransX  = 0. cm
d:Ge/RidgeFilter/TransY  = 0. cm
d:Ge/RidgeFilter/TransZ  = -600.0 mm #60 cm dal fascio
d:Ge/RidgeFilter/RotX = 0. deg
d:Ge/RidgeFilter/RotY = 90. deg #i trapezi sono opposti al fantoccio
d:Ge/RidgeFilter/RotZ = 0. deg


#PHANTOM
s:Ge/Phantom/Parent = "BeamLine"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX = 15. cm
d:Ge/Phantom/HLY = 15. cm
d:Ge/Phantom/HLZ = 15. cm
d:Ge/Phantom/TransX = 0. cm
d:Ge/Phantom/TransY = 0. cm
d:Ge/Phantom/TransZ = -150. cm
#i:Ge/Phantom/XBins = 200
#i:Ge/Phantom/YBins = 200
#i:Ge/Phantom/ZBins = 200
s:Ge/Phantom/AssignToRegionNamed = "RegionPhantom"


#TEPC Propane
sv:Ma/PropaneGas/Components = 2 "Hydrogen" "Carbon" 
uv:Ma/PropaneGas/Fractions = 2 0.182864 0.817136
d:Ma/PropaneGas/Density = 0.108 mg/cm3 

s:Ge/AlShellOut/Parent   = "Phantom"
s:Ge/AlShellOut/Type     = "TsSphere"
s:Ge/AlShellOut/Material = "Aluminum"
d:Ge/AlShellOut/RMin     = 0. mm
d:Ge/AlShellOut/RMax     = 10.0 mm
d:Ge/AlShellOut/SPhi     = 0. deg
d:Ge/AlShellOut/DPhi     = 360. deg
d:Ge/AlShellOut/STheta   = 0. deg
d:Ge/AlShellOut/DTheta   = 180. deg
d:Ge/AlShellOut/TransX   = 0 cm
d:Ge/AlShellOut/TransY   = 0. cm
d:Ge/AlShellOut/TepcStartPos = 14 cm
d:Ge/AlShellOut/TransZ   = Ge/AlShellOut/TepcStartPos - 12 cm    
d:Ge/AlShellOut/RotX     = 0. deg
d:Ge/AlShellOut/RotY     = 0. deg
d:Ge/AlShellOut/RotZ     = 0. deg


s:Ge/AlShellIn/Parent   = "AlShellOut"
s:Ge/AlShellIn/Type     = "TsSphere"
#s:Ge/AlShellIn/Material = "TEgas"
s:Ge/AlShellIn/Material = "PropaneGas"
d:Ge/AlShellIn/RMin     = 0. mm
d:Ge/AlShellIn/RMax     = 9.82 mm
d:Ge/AlShellIn/SPhi     = 0. deg
d:Ge/AlShellIn/DPhi     = 360. deg
d:Ge/AlShellIn/STheta   = 0. deg
d:Ge/AlShellIn/DTheta   = 180. deg
d:Ge/AlShellIn/TransX   = 0. mm
d:Ge/AlShellIn/TransY   = 0. mm
d:Ge/AlShellIn/TransZ   = 0. mm
d:Ge/AlShellIn/RotX     = 0. deg
d:Ge/AlShellIn/RotY     = 0. deg
d:Ge/AlShellIn/RotZ     = 0. deg

s:Ge/A150/Parent   = "AlShellIn"
s:Ge/A150/Type     = "TsSphere"
s:Ge/A150/Material = "G4_A-150_TISSUE"
d:Ge/A150/RMin     = 0. mm
d:Ge/A150/RMax     = 7.62 mm
d:Ge/A150/SPhi     = 0. deg
d:Ge/A150/DPhi     = 360. deg
d:Ge/A150/STheta   = 0. deg
d:Ge/A150/DTheta   = 180. deg
d:Ge/A150/TransX   = 0. mm
d:Ge/A150/TransY   = 0. mm
d:Ge/A150/TransZ   = 0. mm
d:Ge/A150/RotX     = 0. deg
d:Ge/A150/RotY     = 0. deg
d:Ge/A150/RotZ     = 0. deg
s:Ge/A150/AssignToRegionNamed = "MyRegion3"
#d:Ge/A150/MaxStepSize = 0.1 mm 

s:Ge/TEgasSV/Parent   = "A150"
s:Ge/TEgasSV/Type     = "TsSphere"
#s:Ge/TEgasSV/Material = "TEgas"
s:Ge/TEgasSV/Material = "PropaneGas"
d:Ge/TEgasSV/RMin     = 0. mm
d:Ge/TEgasSV/RMax     = 6.35 mm
d:Ge/TEgasSV/SPhi     = 0. deg
d:Ge/TEgasSV/DPhi     = 360. deg
d:Ge/TEgasSV/STheta   = 0. deg
d:Ge/TEgasSV/DTheta   = 180. deg
d:Ge/TEgasSV/TransX   = 0. mm
d:Ge/TEgasSV/TransY   = 0. mm
d:Ge/TEgasSV/TransZ   = 0. mm
d:Ge/TEgasSV/RotX     = 0. deg
d:Ge/TEgasSV/RotY     = 0. deg
d:Ge/TEgasSV/RotZ     = 0. deg
s:Ge/TEgasSV/AssignToRegionNamed = "MyRegion"
#d:Ge/TEgasSV/MaxStepSize = 0.1 mm 


#BEAM
s:So/Demo/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/Demo/Component = "BeamPosition"
d:Ge/BeamPosition/TransZ =  0. cm
s:So/Demo/BeamParticle = "proton"
d:So/Demo/BeamEnergy = 147.8 MeV
u:So/Demo/BeamEnergySpread = 0.9 #da rivedere
s:So/Demo/BeamPositionDistribution = "Gaussian" # None, F0 or Gaussian
s:So/Demo/BeamPositionCutoffShape = "Ellipse" # Rectangle or Ellipse (if F0 or Gaussian)
d:So/Demo/BeamPositionCutoffX = 10. cm # X extent of position (if F0 or Gaussian)
d:So/Demo/BeamPositionCutoffY = 10. cm # Y extent of position (if F0 or Gaussian)
d:So/Demo/BeamPositionSpreadX = 2.9 mm # distribution (if Gaussian)
d:So/Demo/BeamPositionSpreadY = 2.3 mm # distribution (if Gaussian)
s:So/Demo/BeamAngularDistribution = "None" # None, F0 or Gaussian
i:So/Demo/NumberOfHistoriesInRun = 100000000
i:Ts/ShowHistoryCountAtInterval = 10000000
#s:So/Demo/BeamAngularDistribution = "Gaussian" # None, F0 or Gaussian
#d:So/Demo/BeamAngularCutoffX = 90. deg # X cutoff of angular distrib (if F0 or Gaussian)
#d:So/Demo/BeamAngularCutoffY = 90. deg # Y cutoff of angular distrib (if F0 or Gaussian)
#d:So/Demo/BeamAngularSpreadX = 0.0032 rad # X angular distribution (if Gaussian)
#d:So/Demo/BeamAngularSpreadY = 0.0036 rad # Y angular distribution (if Gaussian)

#####################_SCORING_##########################################
#Dose
#s:Sc/DoseToWater/Quantity    = "DoseToWater"
#s:Sc/DoseToWater/Component   = "TEgasSV"
#s:Sc/DoseToWater/OutputFile  = "Dose"
#s:Sc/DoseToWater/OutputType  = "csv"
#b:Sc/DoseToWater/OutputToConsole = "FALSE"
#b:Sc/DoseToWater/Visualize = "TRUE"
#s:Sc/DoseToWater/IfOutputFileAlreadyExists = "Increment" # Exit, Overwrite or Increment

##Fluence
#s:Sc/Fluence/Quantity    = "Fluence"
#s:Sc/Fluence/Component   = "AlShellOut"
#s:Sc/Fluence/OutputFile  = "Fluence"
#s:Sc/Fluence/OutputType  = "csv"
#b:Sc/Fluence/OutputToConsole = "FALSE"
#b:Sc/Fluence/Visualize = "TRUE"
#s:Sc/Fluence/IfOutputFileAlreadyExists = "Increment" # Exit, Overwrite or Increment
  
##phace_space
s:Sc/PS/Quantity                  = "PhaseSpace"
s:Sc/PS/OutputType 				  = "ASCII" 
s:Sc/PS/Component                 = "TEgasSV"
s:Sc/PS/Surface                   = "TEgasSV/OuterCurvedSurface"
s:Sc/PS/OnlyIncludeParticlesGoing = "In"
b:Sc/PS/OutputToConsole           = "TRUE"
s:Sc/PS/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PS/OutputFile 				  = "PhaseSpace"   

##micro
s:Sc/Scorer/Quantity    = "TsYScorer"
s:Sc/Scorer/Component   = "TEgasSV"
###############################################################
# Mandatory parameters
i:Sc/Scorer/NumberOfHistoriesInRun    = So/Demo/NumberOfHistoriesInRun
i:Sc/Scorer/GeometryNumber            = 0
d:Sc/Scorer/SensitiveVolumeRadius     = 6.35 mm      # radius of sensitive volume (except for silicon microdosimeter)
d:Sc/Scorer/TissueEquivalentRadius    = 1.0 um      # radius of equivalent size of tissue equivalent volume (to calcu0e mean chord length)
#d:Sc/Scorer/MeanPathLength           = 10 um        # Mean path length for SOI detector 
d:Sc/Scorer/TransX                    = Ge/Phantom/TransX + Ge/AlShellOut/TransX cm          # x position of sensitive volume from world center
d:Sc/Scorer/TransY                    = Ge/Phantom/TransY + Ge/AlShellOut/TransY cm          # y position of sensitive volume from world center
d:Sc/Scorer/TransZ                    = Ge/Phantom/TransZ + Ge/AlShellOut/TransZ cm     # y position of sensitive volume from world center
s:Sc/Scorer/OutputType                = "ASCII"       # OutputType must be ASCII, Binary or ROOT (unit: keV/um)
#s:Sc/Scorer/IfOutputFileAlreadyExists = "Overwrite" 
s:Sc/Scorer/IfOutputFileAlreadyExists = "Increment" 


########################### Optional parameters
u:Sc/Scorer/LinealEnergyLowerlimit      = 0.1         # in unit of keV/um
u:Sc/Scorer/LinealEnergyUpperlimit     = 1000        # in unit of keV/um  
b:Sc/Scorer/IncludeFrequencyMeanLinealEnergy   = "True"
b:Sc/Scorer/IncludeDoseMeanLinealEnergy   = "True"
b:Sc/Scorer/GetRBEWithBiologicalWeightFunction = "True"
b:Sc/Scorer/GetRBEWithMKModel = "True"
u:Sc/Scorer/PileupProbability = 0.0
b:Sc/Scorer/GetStatisticInfo =  "True"
i:Sc/Scorer/SpectrumUpdateTimes = 100

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" 
##Phantom
d:Ph/Default/ForRegion/RegionPhantom/CutForElectron = 0.1 mm
##A-150_TISSUE
d:Ph/Default/ForRegion/MyRegion3/CutForElectron = 0.01 mm 
##TsSphere_propangas cut to ensure no e- go out
d:Ph/Default/ForRegion/MyRegion/CutForElectron = 9. mm
